WorkflowBuilder(Version=2.7.1)
Bonsai.Vision.FileCapture
  FileName="C:\Users\Andre Maia Chagas\Box\embryo_monitoring_23.01.25 Bonsai output files for Andre\5_2023-01-27T18_53_50.avi"
  PlaybackRate=1000000
  StartPosition=0
  PositionUnits=Frames
  Loop=false
  Playing=true
-> Bonsai.Vision.Grayscale => #1
IntProperty(Value=50) => #2
#1, #2 -> Zip => #3
-> SelectMany "Top Left" => #4
    WorkflowInput Source1 => #0
    -> MemberSelector(Selector=Item1) => #1
    #0 -> MemberSelector(Selector=Item2) => #2
    #1, #2 -> GroupWorkflow index1 => #3
        WorkflowInput Source2
        -> PropertyMapping(ThresholdValue) => #1
        WorkflowInput Source1
        -> Bonsai.Vision.Crop(RegionOfInterest(X=150, Y=208, Width=32, Height=91)) => #3
        #3, #1 -> Bonsai.Vision.Threshold(ThresholdValue=50, MaxValue=255, ThresholdType=Binary)
        -> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=375, MaxArea=nil)
        -> Bonsai.Vision.BinaryRegionAnalysis
        -> Index(Operand=IntProperty(Value=0)) => #7
        #3 -> Bonsai.Vision.Threshold(ThresholdValue=0, MaxValue=255, ThresholdType=Binary)
        -> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=200, MaxArea=nil)
        -> Bonsai.Vision.BinaryRegionAnalysis
        -> Index(Operand=IntProperty(Value=0)) => #11
        #7, #11 -> Catch => #12
        -> MemberSelector(Selector=Contour.Rect)
        -> PropertyMapping(RegionOfInterest) => #14
        #14, #3 -> Bonsai.Vision.Crop(RegionOfInterest(X=7, Y=27, Width=22, Height=57)) => #15
        -> Bonsai.Dsp.Average
        -> MemberSelector(Selector=Val0) => #17
        #15 -> MemberSelector(Selector=Height) => #18
        #15 -> MemberSelector(Selector=Width) => #19
        #12 -> MemberSelector(Selector=Area)
        -> LastOrDefault => #21
        #19, #18, #17, #21 -> Zip
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression:
            new(
            Item1 as width,
            Item2 as height,
            Item3 as avgBright,
            Item4 as area
            )
        -> WorkflowOutput
    #1, #2 -> GroupWorkflow index2 => #4
        WorkflowInput Source2
        -> PropertyMapping(ThresholdValue) => #1
        WorkflowInput Source1
        -> Bonsai.Vision.Crop(RegionOfInterest(X=150, Y=208, Width=32, Height=91)) => #3
        #3, #1 -> Bonsai.Vision.Threshold(ThresholdValue=50, MaxValue=255, ThresholdType=Binary)
        -> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=375, MaxArea=nil)
        -> Bonsai.Vision.BinaryRegionAnalysis
        -> Index(Operand=IntProperty(Value=0)) => #7
        #3 -> Bonsai.Vision.Threshold(ThresholdValue=0, MaxValue=255, ThresholdType=Binary)
        -> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=200, MaxArea=nil)
        -> Bonsai.Vision.BinaryRegionAnalysis
        -> Index(Operand=IntProperty(Value=0)) => #11
        #7, #11 -> Catch => #12
        -> MemberSelector(Selector=Contour.Rect)
        -> PropertyMapping(RegionOfInterest) => #14
        #14, #3 -> Bonsai.Vision.Crop(RegionOfInterest(X=7, Y=27, Width=22, Height=57)) => #15
        -> Bonsai.Dsp.Average
        -> MemberSelector(Selector=Val0) => #17
        #15 -> MemberSelector(Selector=Height) => #18
        #15 -> MemberSelector(Selector=Width) => #19
        #12 -> MemberSelector(Selector=Area)
        -> LastOrDefault => #21
        #19, #18, #17, #21 -> Zip
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression:
            new(
            Item1 as width,
            Item2 as height,
            Item3 as avgBright,
            Item4 as area
            )
        -> WorkflowOutput
    #1, #2 -> GroupWorkflow index3 => #5
        WorkflowInput Source2
        -> PropertyMapping(ThresholdValue) => #1
        WorkflowInput Source1
        -> Bonsai.Vision.Crop(RegionOfInterest(X=150, Y=208, Width=32, Height=91)) => #3
        #3, #1 -> Bonsai.Vision.Threshold(ThresholdValue=50, MaxValue=255, ThresholdType=Binary)
        -> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=375, MaxArea=nil)
        -> Bonsai.Vision.BinaryRegionAnalysis
        -> Index(Operand=IntProperty(Value=0)) => #7
        #3 -> Bonsai.Vision.Threshold(ThresholdValue=0, MaxValue=255, ThresholdType=Binary)
        -> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=200, MaxArea=nil)
        -> Bonsai.Vision.BinaryRegionAnalysis
        -> Index(Operand=IntProperty(Value=0)) => #11
        #7, #11 -> Catch => #12
        -> MemberSelector(Selector=Contour.Rect)
        -> PropertyMapping(RegionOfInterest) => #14
        #14, #3 -> Bonsai.Vision.Crop(RegionOfInterest(X=7, Y=27, Width=22, Height=57)) => #15
        -> Bonsai.Dsp.Average
        -> MemberSelector(Selector=Val0) => #17
        #15 -> MemberSelector(Selector=Height) => #18
        #15 -> MemberSelector(Selector=Width) => #19
        #12 -> MemberSelector(Selector=Area)
        -> LastOrDefault => #21
        #19, #18, #17, #21 -> Zip
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression:
            new(
            Item1 as width,
            Item2 as height,
            Item3 as avgBright,
            Item4 as area
            )
        -> WorkflowOutput
    #1, #2 -> GroupWorkflow index4 => #6
        WorkflowInput Source2
        -> PropertyMapping(ThresholdValue) => #1
        WorkflowInput Source1
        -> Bonsai.Vision.Crop(RegionOfInterest(X=150, Y=208, Width=32, Height=91)) => #3
        #3, #1 -> Bonsai.Vision.Threshold(ThresholdValue=50, MaxValue=255, ThresholdType=Binary)
        -> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=375, MaxArea=nil)
        -> Bonsai.Vision.BinaryRegionAnalysis
        -> Index(Operand=IntProperty(Value=0)) => #7
        #3 -> Bonsai.Vision.Threshold(ThresholdValue=0, MaxValue=255, ThresholdType=Binary)
        -> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=200, MaxArea=nil)
        -> Bonsai.Vision.BinaryRegionAnalysis
        -> Index(Operand=IntProperty(Value=0)) => #11
        #7, #11 -> Catch => #12
        -> MemberSelector(Selector=Contour.Rect)
        -> PropertyMapping(RegionOfInterest) => #14
        #14, #3 -> Bonsai.Vision.Crop(RegionOfInterest(X=7, Y=27, Width=22, Height=57)) => #15
        -> Bonsai.Dsp.Average
        -> MemberSelector(Selector=Val0) => #17
        #15 -> MemberSelector(Selector=Height) => #18
        #15 -> MemberSelector(Selector=Width) => #19
        #12 -> MemberSelector(Selector=Area)
        -> LastOrDefault => #21
        #19, #18, #17, #21 -> Zip
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression:
            new(
            Item1 as width,
            Item2 as height,
            Item3 as avgBright,
            Item4 as area
            )
        -> WorkflowOutput
    #1, #2 -> GroupWorkflow index5 => #7
        WorkflowInput Source2
        -> PropertyMapping(ThresholdValue) => #1
        WorkflowInput Source1
        -> Bonsai.Vision.Crop(RegionOfInterest(X=150, Y=208, Width=32, Height=91)) => #3
        #3, #1 -> Bonsai.Vision.Threshold(ThresholdValue=50, MaxValue=255, ThresholdType=Binary)
        -> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=375, MaxArea=nil)
        -> Bonsai.Vision.BinaryRegionAnalysis
        -> Index(Operand=IntProperty(Value=0)) => #7
        #3 -> Bonsai.Vision.Threshold(ThresholdValue=0, MaxValue=255, ThresholdType=Binary)
        -> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=200, MaxArea=nil)
        -> Bonsai.Vision.BinaryRegionAnalysis
        -> Index(Operand=IntProperty(Value=0)) => #11
        #7, #11 -> Catch => #12
        -> MemberSelector(Selector=Contour.Rect)
        -> PropertyMapping(RegionOfInterest) => #14
        #14, #3 -> Bonsai.Vision.Crop(RegionOfInterest(X=7, Y=27, Width=22, Height=57)) => #15
        -> Bonsai.Dsp.Average
        -> MemberSelector(Selector=Val0) => #17
        #15 -> MemberSelector(Selector=Height) => #18
        #15 -> MemberSelector(Selector=Width) => #19
        #12 -> MemberSelector(Selector=Area)
        -> LastOrDefault => #21
        #19, #18, #17, #21 -> Zip
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression:
            new(
            Item1 as width,
            Item2 as height,
            Item3 as avgBright,
            Item4 as area
            )
        -> WorkflowOutput
    #1, #2 -> GroupWorkflow index6 => #8
        WorkflowInput Source2
        -> PropertyMapping(ThresholdValue) => #1
        WorkflowInput Source1
        -> Bonsai.Vision.Crop(RegionOfInterest(X=150, Y=208, Width=32, Height=91)) => #3
        #3, #1 -> Bonsai.Vision.Threshold(ThresholdValue=50, MaxValue=255, ThresholdType=Binary)
        -> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=375, MaxArea=nil)
        -> Bonsai.Vision.BinaryRegionAnalysis
        -> Index(Operand=IntProperty(Value=0)) => #7
        #3 -> Bonsai.Vision.Threshold(ThresholdValue=0, MaxValue=255, ThresholdType=Binary)
        -> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=200, MaxArea=nil)
        -> Bonsai.Vision.BinaryRegionAnalysis
        -> Index(Operand=IntProperty(Value=0)) => #11
        #7, #11 -> Catch => #12
        -> MemberSelector(Selector=Contour.Rect)
        -> PropertyMapping(RegionOfInterest) => #14
        #14, #3 -> Bonsai.Vision.Crop(RegionOfInterest(X=7, Y=27, Width=22, Height=57)) => #15
        -> Bonsai.Dsp.Average
        -> MemberSelector(Selector=Val0) => #17
        #15 -> MemberSelector(Selector=Height) => #18
        #15 -> MemberSelector(Selector=Width) => #19
        #12 -> MemberSelector(Selector=Area)
        -> LastOrDefault => #21
        #19, #18, #17, #21 -> Zip
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression:
            new(
            Item1 as width,
            Item2 as height,
            Item3 as avgBright,
            Item4 as area
            )
        -> WorkflowOutput
    #3, #4, #5, #6, #7, #8 -> Zip
    -> WorkflowOutput
#3 -> SelectMany "Top Right" => #5
    WorkflowInput Source1 => #0
    -> MemberSelector(Selector=Item1) => #1
    #0 -> MemberSelector(Selector=Item2) => #2
    #1, #2 -> GroupWorkflow index1 => #3
        WorkflowInput Source2
        -> PropertyMapping(ThresholdValue) => #1
        WorkflowInput Source1
        -> Bonsai.Vision.Crop(RegionOfInterest(X=150, Y=208, Width=32, Height=91)) => #3
        #3, #1 -> Bonsai.Vision.Threshold(ThresholdValue=50, MaxValue=255, ThresholdType=Binary)
        -> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=375, MaxArea=nil)
        -> Bonsai.Vision.BinaryRegionAnalysis
        -> Index(Operand=IntProperty(Value=0)) => #7
        #3 -> Bonsai.Vision.Threshold(ThresholdValue=0, MaxValue=255, ThresholdType=Binary)
        -> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=200, MaxArea=nil)
        -> Bonsai.Vision.BinaryRegionAnalysis
        -> Index(Operand=IntProperty(Value=0)) => #11
        #7, #11 -> Catch => #12
        -> MemberSelector(Selector=Contour.Rect)
        -> PropertyMapping(RegionOfInterest) => #14
        #14, #3 -> Bonsai.Vision.Crop(RegionOfInterest(X=7, Y=27, Width=22, Height=57)) => #15
        -> Bonsai.Dsp.Average
        -> MemberSelector(Selector=Val0) => #17
        #15 -> MemberSelector(Selector=Height) => #18
        #15 -> MemberSelector(Selector=Width) => #19
        #12 -> MemberSelector(Selector=Area)
        -> LastOrDefault => #21
        #19, #18, #17, #21 -> Zip
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression:
            new(
            Item1 as width,
            Item2 as height,
            Item3 as avgBright,
            Item4 as area
            )
        -> WorkflowOutput
    #1, #2 -> GroupWorkflow index2 => #4
        WorkflowInput Source2
        -> PropertyMapping(ThresholdValue) => #1
        WorkflowInput Source1
        -> Bonsai.Vision.Crop(RegionOfInterest(X=150, Y=208, Width=32, Height=91)) => #3
        #3, #1 -> Bonsai.Vision.Threshold(ThresholdValue=50, MaxValue=255, ThresholdType=Binary)
        -> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=375, MaxArea=nil)
        -> Bonsai.Vision.BinaryRegionAnalysis
        -> Index(Operand=IntProperty(Value=0)) => #7
        #3 -> Bonsai.Vision.Threshold(ThresholdValue=0, MaxValue=255, ThresholdType=Binary)
        -> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=200, MaxArea=nil)
        -> Bonsai.Vision.BinaryRegionAnalysis
        -> Index(Operand=IntProperty(Value=0)) => #11
        #7, #11 -> Catch => #12
        -> MemberSelector(Selector=Contour.Rect)
        -> PropertyMapping(RegionOfInterest) => #14
        #14, #3 -> Bonsai.Vision.Crop(RegionOfInterest(X=7, Y=27, Width=22, Height=57)) => #15
        -> Bonsai.Dsp.Average
        -> MemberSelector(Selector=Val0) => #17
        #15 -> MemberSelector(Selector=Height) => #18
        #15 -> MemberSelector(Selector=Width) => #19
        #12 -> MemberSelector(Selector=Area)
        -> LastOrDefault => #21
        #19, #18, #17, #21 -> Zip
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression:
            new(
            Item1 as width,
            Item2 as height,
            Item3 as avgBright,
            Item4 as area
            )
        -> WorkflowOutput
    #1, #2 -> GroupWorkflow index3 => #5
        WorkflowInput Source2
        -> PropertyMapping(ThresholdValue) => #1
        WorkflowInput Source1
        -> Bonsai.Vision.Crop(RegionOfInterest(X=150, Y=208, Width=32, Height=91)) => #3
        #3, #1 -> Bonsai.Vision.Threshold(ThresholdValue=50, MaxValue=255, ThresholdType=Binary)
        -> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=375, MaxArea=nil)
        -> Bonsai.Vision.BinaryRegionAnalysis
        -> Index(Operand=IntProperty(Value=0)) => #7
        #3 -> Bonsai.Vision.Threshold(ThresholdValue=0, MaxValue=255, ThresholdType=Binary)
        -> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=200, MaxArea=nil)
        -> Bonsai.Vision.BinaryRegionAnalysis
        -> Index(Operand=IntProperty(Value=0)) => #11
        #7, #11 -> Catch => #12
        -> MemberSelector(Selector=Contour.Rect)
        -> PropertyMapping(RegionOfInterest) => #14
        #14, #3 -> Bonsai.Vision.Crop(RegionOfInterest(X=7, Y=27, Width=22, Height=57)) => #15
        -> Bonsai.Dsp.Average
        -> MemberSelector(Selector=Val0) => #17
        #15 -> MemberSelector(Selector=Height) => #18
        #15 -> MemberSelector(Selector=Width) => #19
        #12 -> MemberSelector(Selector=Area)
        -> LastOrDefault => #21
        #19, #18, #17, #21 -> Zip
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression:
            new(
            Item1 as width,
            Item2 as height,
            Item3 as avgBright,
            Item4 as area
            )
        -> WorkflowOutput
    #1, #2 -> GroupWorkflow index4 => #6
        WorkflowInput Source2
        -> PropertyMapping(ThresholdValue) => #1
        WorkflowInput Source1
        -> Bonsai.Vision.Crop(RegionOfInterest(X=150, Y=208, Width=32, Height=91)) => #3
        #3, #1 -> Bonsai.Vision.Threshold(ThresholdValue=50, MaxValue=255, ThresholdType=Binary)
        -> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=375, MaxArea=nil)
        -> Bonsai.Vision.BinaryRegionAnalysis
        -> Index(Operand=IntProperty(Value=0)) => #7
        #3 -> Bonsai.Vision.Threshold(ThresholdValue=0, MaxValue=255, ThresholdType=Binary)
        -> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=200, MaxArea=nil)
        -> Bonsai.Vision.BinaryRegionAnalysis
        -> Index(Operand=IntProperty(Value=0)) => #11
        #7, #11 -> Catch => #12
        -> MemberSelector(Selector=Contour.Rect)
        -> PropertyMapping(RegionOfInterest) => #14
        #14, #3 -> Bonsai.Vision.Crop(RegionOfInterest(X=7, Y=27, Width=22, Height=57)) => #15
        -> Bonsai.Dsp.Average
        -> MemberSelector(Selector=Val0) => #17
        #15 -> MemberSelector(Selector=Height) => #18
        #15 -> MemberSelector(Selector=Width) => #19
        #12 -> MemberSelector(Selector=Area)
        -> LastOrDefault => #21
        #19, #18, #17, #21 -> Zip
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression:
            new(
            Item1 as width,
            Item2 as height,
            Item3 as avgBright,
            Item4 as area
            )
        -> WorkflowOutput
    #1, #2 -> GroupWorkflow index5 => #7
        WorkflowInput Source2
        -> PropertyMapping(ThresholdValue) => #1
        WorkflowInput Source1
        -> Bonsai.Vision.Crop(RegionOfInterest(X=150, Y=208, Width=32, Height=91)) => #3
        #3, #1 -> Bonsai.Vision.Threshold(ThresholdValue=50, MaxValue=255, ThresholdType=Binary)
        -> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=375, MaxArea=nil)
        -> Bonsai.Vision.BinaryRegionAnalysis
        -> Index(Operand=IntProperty(Value=0)) => #7
        #3 -> Bonsai.Vision.Threshold(ThresholdValue=0, MaxValue=255, ThresholdType=Binary)
        -> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=200, MaxArea=nil)
        -> Bonsai.Vision.BinaryRegionAnalysis
        -> Index(Operand=IntProperty(Value=0)) => #11
        #7, #11 -> Catch => #12
        -> MemberSelector(Selector=Contour.Rect)
        -> PropertyMapping(RegionOfInterest) => #14
        #14, #3 -> Bonsai.Vision.Crop(RegionOfInterest(X=7, Y=27, Width=22, Height=57)) => #15
        -> Bonsai.Dsp.Average
        -> MemberSelector(Selector=Val0) => #17
        #15 -> MemberSelector(Selector=Height) => #18
        #15 -> MemberSelector(Selector=Width) => #19
        #12 -> MemberSelector(Selector=Area)
        -> LastOrDefault => #21
        #19, #18, #17, #21 -> Zip
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression:
            new(
            Item1 as width,
            Item2 as height,
            Item3 as avgBright,
            Item4 as area
            )
        -> WorkflowOutput
    #1, #2 -> GroupWorkflow index6 => #8
        WorkflowInput Source2
        -> PropertyMapping(ThresholdValue) => #1
        WorkflowInput Source1
        -> Bonsai.Vision.Crop(RegionOfInterest(X=150, Y=208, Width=32, Height=91)) => #3
        #3, #1 -> Bonsai.Vision.Threshold(ThresholdValue=50, MaxValue=255, ThresholdType=Binary)
        -> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=375, MaxArea=nil)
        -> Bonsai.Vision.BinaryRegionAnalysis
        -> Index(Operand=IntProperty(Value=0)) => #7
        #3 -> Bonsai.Vision.Threshold(ThresholdValue=0, MaxValue=255, ThresholdType=Binary)
        -> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=200, MaxArea=nil)
        -> Bonsai.Vision.BinaryRegionAnalysis
        -> Index(Operand=IntProperty(Value=0)) => #11
        #7, #11 -> Catch => #12
        -> MemberSelector(Selector=Contour.Rect)
        -> PropertyMapping(RegionOfInterest) => #14
        #14, #3 -> Bonsai.Vision.Crop(RegionOfInterest(X=7, Y=27, Width=22, Height=57)) => #15
        -> Bonsai.Dsp.Average
        -> MemberSelector(Selector=Val0) => #17
        #15 -> MemberSelector(Selector=Height) => #18
        #15 -> MemberSelector(Selector=Width) => #19
        #12 -> MemberSelector(Selector=Area)
        -> LastOrDefault => #21
        #19, #18, #17, #21 -> Zip
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression:
            new(
            Item1 as width,
            Item2 as height,
            Item3 as avgBright,
            Item4 as area
            )
        -> WorkflowOutput
    #3, #4, #5, #6, #7, #8 -> Zip
    -> WorkflowOutput
#3 -> SelectMany "Bottom Left" => #6
    WorkflowInput Source1 => #0
    -> MemberSelector(Selector=Item1) => #1
    #0 -> MemberSelector(Selector=Item2) => #2
    #1, #2 -> GroupWorkflow index1 => #3
        WorkflowInput Source2
        -> PropertyMapping(ThresholdValue) => #1
        WorkflowInput Source1
        -> Bonsai.Vision.Crop(RegionOfInterest(X=150, Y=208, Width=32, Height=91)) => #3
        #3, #1 -> Bonsai.Vision.Threshold(ThresholdValue=50, MaxValue=255, ThresholdType=Binary)
        -> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=375, MaxArea=nil)
        -> Bonsai.Vision.BinaryRegionAnalysis
        -> Index(Operand=IntProperty(Value=0)) => #7
        #3 -> Bonsai.Vision.Threshold(ThresholdValue=0, MaxValue=255, ThresholdType=Binary)
        -> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=200, MaxArea=nil)
        -> Bonsai.Vision.BinaryRegionAnalysis
        -> Index(Operand=IntProperty(Value=0)) => #11
        #7, #11 -> Catch => #12
        -> MemberSelector(Selector=Contour.Rect)
        -> PropertyMapping(RegionOfInterest) => #14
        #14, #3 -> Bonsai.Vision.Crop(RegionOfInterest(X=7, Y=27, Width=22, Height=57)) => #15
        -> Bonsai.Dsp.Average
        -> MemberSelector(Selector=Val0) => #17
        #15 -> MemberSelector(Selector=Height) => #18
        #15 -> MemberSelector(Selector=Width) => #19
        #12 -> MemberSelector(Selector=Area)
        -> LastOrDefault => #21
        #19, #18, #17, #21 -> Zip
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression:
            new(
            Item1 as width,
            Item2 as height,
            Item3 as avgBright,
            Item4 as area
            )
        -> WorkflowOutput
    #1, #2 -> GroupWorkflow index2 => #4
        WorkflowInput Source2
        -> PropertyMapping(ThresholdValue) => #1
        WorkflowInput Source1
        -> Bonsai.Vision.Crop(RegionOfInterest(X=150, Y=208, Width=32, Height=91)) => #3
        #3, #1 -> Bonsai.Vision.Threshold(ThresholdValue=50, MaxValue=255, ThresholdType=Binary)
        -> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=375, MaxArea=nil)
        -> Bonsai.Vision.BinaryRegionAnalysis
        -> Index(Operand=IntProperty(Value=0)) => #7
        #3 -> Bonsai.Vision.Threshold(ThresholdValue=0, MaxValue=255, ThresholdType=Binary)
        -> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=200, MaxArea=nil)
        -> Bonsai.Vision.BinaryRegionAnalysis
        -> Index(Operand=IntProperty(Value=0)) => #11
        #7, #11 -> Catch => #12
        -> MemberSelector(Selector=Contour.Rect)
        -> PropertyMapping(RegionOfInterest) => #14
        #14, #3 -> Bonsai.Vision.Crop(RegionOfInterest(X=7, Y=27, Width=22, Height=57)) => #15
        -> Bonsai.Dsp.Average
        -> MemberSelector(Selector=Val0) => #17
        #15 -> MemberSelector(Selector=Height) => #18
        #15 -> MemberSelector(Selector=Width) => #19
        #12 -> MemberSelector(Selector=Area)
        -> LastOrDefault => #21
        #19, #18, #17, #21 -> Zip
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression:
            new(
            Item1 as width,
            Item2 as height,
            Item3 as avgBright,
            Item4 as area
            )
        -> WorkflowOutput
    #1, #2 -> GroupWorkflow index3 => #5
        WorkflowInput Source2
        -> PropertyMapping(ThresholdValue) => #1
        WorkflowInput Source1
        -> Bonsai.Vision.Crop(RegionOfInterest(X=150, Y=208, Width=32, Height=91)) => #3
        #3, #1 -> Bonsai.Vision.Threshold(ThresholdValue=50, MaxValue=255, ThresholdType=Binary)
        -> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=375, MaxArea=nil)
        -> Bonsai.Vision.BinaryRegionAnalysis
        -> Index(Operand=IntProperty(Value=0)) => #7
        #3 -> Bonsai.Vision.Threshold(ThresholdValue=0, MaxValue=255, ThresholdType=Binary)
        -> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=200, MaxArea=nil)
        -> Bonsai.Vision.BinaryRegionAnalysis
        -> Index(Operand=IntProperty(Value=0)) => #11
        #7, #11 -> Catch => #12
        -> MemberSelector(Selector=Contour.Rect)
        -> PropertyMapping(RegionOfInterest) => #14
        #14, #3 -> Bonsai.Vision.Crop(RegionOfInterest(X=7, Y=27, Width=22, Height=57)) => #15
        -> Bonsai.Dsp.Average
        -> MemberSelector(Selector=Val0) => #17
        #15 -> MemberSelector(Selector=Height) => #18
        #15 -> MemberSelector(Selector=Width) => #19
        #12 -> MemberSelector(Selector=Area)
        -> LastOrDefault => #21
        #19, #18, #17, #21 -> Zip
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression:
            new(
            Item1 as width,
            Item2 as height,
            Item3 as avgBright,
            Item4 as area
            )
        -> WorkflowOutput
    #1, #2 -> GroupWorkflow index4 => #6
        WorkflowInput Source2
        -> PropertyMapping(ThresholdValue) => #1
        WorkflowInput Source1
        -> Bonsai.Vision.Crop(RegionOfInterest(X=150, Y=208, Width=32, Height=91)) => #3
        #3, #1 -> Bonsai.Vision.Threshold(ThresholdValue=50, MaxValue=255, ThresholdType=Binary)
        -> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=375, MaxArea=nil)
        -> Bonsai.Vision.BinaryRegionAnalysis
        -> Index(Operand=IntProperty(Value=0)) => #7
        #3 -> Bonsai.Vision.Threshold(ThresholdValue=0, MaxValue=255, ThresholdType=Binary)
        -> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=200, MaxArea=nil)
        -> Bonsai.Vision.BinaryRegionAnalysis
        -> Index(Operand=IntProperty(Value=0)) => #11
        #7, #11 -> Catch => #12
        -> MemberSelector(Selector=Contour.Rect)
        -> PropertyMapping(RegionOfInterest) => #14
        #14, #3 -> Bonsai.Vision.Crop(RegionOfInterest(X=7, Y=27, Width=22, Height=57)) => #15
        -> Bonsai.Dsp.Average
        -> MemberSelector(Selector=Val0) => #17
        #15 -> MemberSelector(Selector=Height) => #18
        #15 -> MemberSelector(Selector=Width) => #19
        #12 -> MemberSelector(Selector=Area)
        -> LastOrDefault => #21
        #19, #18, #17, #21 -> Zip
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression:
            new(
            Item1 as width,
            Item2 as height,
            Item3 as avgBright,
            Item4 as area
            )
        -> WorkflowOutput
    #1, #2 -> GroupWorkflow index5 => #7
        WorkflowInput Source2
        -> PropertyMapping(ThresholdValue) => #1
        WorkflowInput Source1
        -> Bonsai.Vision.Crop(RegionOfInterest(X=150, Y=208, Width=32, Height=91)) => #3
        #3, #1 -> Bonsai.Vision.Threshold(ThresholdValue=50, MaxValue=255, ThresholdType=Binary)
        -> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=375, MaxArea=nil)
        -> Bonsai.Vision.BinaryRegionAnalysis
        -> Index(Operand=IntProperty(Value=0)) => #7
        #3 -> Bonsai.Vision.Threshold(ThresholdValue=0, MaxValue=255, ThresholdType=Binary)
        -> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=200, MaxArea=nil)
        -> Bonsai.Vision.BinaryRegionAnalysis
        -> Index(Operand=IntProperty(Value=0)) => #11
        #7, #11 -> Catch => #12
        -> MemberSelector(Selector=Contour.Rect)
        -> PropertyMapping(RegionOfInterest) => #14
        #14, #3 -> Bonsai.Vision.Crop(RegionOfInterest(X=7, Y=27, Width=22, Height=57)) => #15
        -> Bonsai.Dsp.Average
        -> MemberSelector(Selector=Val0) => #17
        #15 -> MemberSelector(Selector=Height) => #18
        #15 -> MemberSelector(Selector=Width) => #19
        #12 -> MemberSelector(Selector=Area)
        -> LastOrDefault => #21
        #19, #18, #17, #21 -> Zip
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression:
            new(
            Item1 as width,
            Item2 as height,
            Item3 as avgBright,
            Item4 as area
            )
        -> WorkflowOutput
    #1, #2 -> GroupWorkflow index6 => #8
        WorkflowInput Source2
        -> PropertyMapping(ThresholdValue) => #1
        WorkflowInput Source1
        -> Bonsai.Vision.Crop(RegionOfInterest(X=150, Y=208, Width=32, Height=91)) => #3
        #3, #1 -> Bonsai.Vision.Threshold(ThresholdValue=50, MaxValue=255, ThresholdType=Binary)
        -> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=375, MaxArea=nil)
        -> Bonsai.Vision.BinaryRegionAnalysis
        -> Index(Operand=IntProperty(Value=0)) => #7
        #3 -> Bonsai.Vision.Threshold(ThresholdValue=0, MaxValue=255, ThresholdType=Binary)
        -> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=200, MaxArea=nil)
        -> Bonsai.Vision.BinaryRegionAnalysis
        -> Index(Operand=IntProperty(Value=0)) => #11
        #7, #11 -> Catch => #12
        -> MemberSelector(Selector=Contour.Rect)
        -> PropertyMapping(RegionOfInterest) => #14
        #14, #3 -> Bonsai.Vision.Crop(RegionOfInterest(X=7, Y=27, Width=22, Height=57)) => #15
        -> Bonsai.Dsp.Average
        -> MemberSelector(Selector=Val0) => #17
        #15 -> MemberSelector(Selector=Height) => #18
        #15 -> MemberSelector(Selector=Width) => #19
        #12 -> MemberSelector(Selector=Area)
        -> LastOrDefault => #21
        #19, #18, #17, #21 -> Zip
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression:
            new(
            Item1 as width,
            Item2 as height,
            Item3 as avgBright,
            Item4 as area
            )
        -> WorkflowOutput
    #3, #4, #5, #6, #7, #8 -> Zip
    -> WorkflowOutput
#3 -> SelectMany "Bottom Right" => #7
    WorkflowInput Source1 => #0
    -> MemberSelector(Selector=Item1) => #1
    #0 -> MemberSelector(Selector=Item2) => #2
    #1, #2 -> GroupWorkflow index1 => #3
        WorkflowInput Source2
        -> PropertyMapping(ThresholdValue) => #1
        WorkflowInput Source1
        -> Bonsai.Vision.Crop(RegionOfInterest(X=150, Y=208, Width=32, Height=91)) => #3
        #3, #1 -> Bonsai.Vision.Threshold(ThresholdValue=50, MaxValue=255, ThresholdType=Binary)
        -> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=375, MaxArea=nil)
        -> Bonsai.Vision.BinaryRegionAnalysis
        -> Index(Operand=IntProperty(Value=0)) => #7
        #3 -> Bonsai.Vision.Threshold(ThresholdValue=0, MaxValue=255, ThresholdType=Binary)
        -> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=200, MaxArea=nil)
        -> Bonsai.Vision.BinaryRegionAnalysis
        -> Index(Operand=IntProperty(Value=0)) => #11
        #7, #11 -> Catch => #12
        -> MemberSelector(Selector=Contour.Rect)
        -> PropertyMapping(RegionOfInterest) => #14
        #14, #3 -> Bonsai.Vision.Crop(RegionOfInterest(X=7, Y=27, Width=22, Height=57)) => #15
        -> Bonsai.Dsp.Average
        -> MemberSelector(Selector=Val0) => #17
        #15 -> MemberSelector(Selector=Height) => #18
        #15 -> MemberSelector(Selector=Width) => #19
        #12 -> MemberSelector(Selector=Area)
        -> LastOrDefault => #21
        #19, #18, #17, #21 -> Zip
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression:
            new(
            Item1 as width,
            Item2 as height,
            Item3 as avgBright,
            Item4 as area
            )
        -> WorkflowOutput
    #1, #2 -> GroupWorkflow index2 => #4
        WorkflowInput Source2
        -> PropertyMapping(ThresholdValue) => #1
        WorkflowInput Source1
        -> Bonsai.Vision.Crop(RegionOfInterest(X=150, Y=208, Width=32, Height=91)) => #3
        #3, #1 -> Bonsai.Vision.Threshold(ThresholdValue=50, MaxValue=255, ThresholdType=Binary)
        -> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=375, MaxArea=nil)
        -> Bonsai.Vision.BinaryRegionAnalysis
        -> Index(Operand=IntProperty(Value=0)) => #7
        #3 -> Bonsai.Vision.Threshold(ThresholdValue=0, MaxValue=255, ThresholdType=Binary)
        -> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=200, MaxArea=nil)
        -> Bonsai.Vision.BinaryRegionAnalysis
        -> Index(Operand=IntProperty(Value=0)) => #11
        #7, #11 -> Catch => #12
        -> MemberSelector(Selector=Contour.Rect)
        -> PropertyMapping(RegionOfInterest) => #14
        #14, #3 -> Bonsai.Vision.Crop(RegionOfInterest(X=7, Y=27, Width=22, Height=57)) => #15
        -> Bonsai.Dsp.Average
        -> MemberSelector(Selector=Val0) => #17
        #15 -> MemberSelector(Selector=Height) => #18
        #15 -> MemberSelector(Selector=Width) => #19
        #12 -> MemberSelector(Selector=Area)
        -> LastOrDefault => #21
        #19, #18, #17, #21 -> Zip
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression:
            new(
            Item1 as width,
            Item2 as height,
            Item3 as avgBright,
            Item4 as area
            )
        -> WorkflowOutput
    #1, #2 -> GroupWorkflow index3 => #5
        WorkflowInput Source2
        -> PropertyMapping(ThresholdValue) => #1
        WorkflowInput Source1
        -> Bonsai.Vision.Crop(RegionOfInterest(X=150, Y=208, Width=32, Height=91)) => #3
        #3, #1 -> Bonsai.Vision.Threshold(ThresholdValue=50, MaxValue=255, ThresholdType=Binary)
        -> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=375, MaxArea=nil)
        -> Bonsai.Vision.BinaryRegionAnalysis
        -> Index(Operand=IntProperty(Value=0)) => #7
        #3 -> Bonsai.Vision.Threshold(ThresholdValue=0, MaxValue=255, ThresholdType=Binary)
        -> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=200, MaxArea=nil)
        -> Bonsai.Vision.BinaryRegionAnalysis
        -> Index(Operand=IntProperty(Value=0)) => #11
        #7, #11 -> Catch => #12
        -> MemberSelector(Selector=Contour.Rect)
        -> PropertyMapping(RegionOfInterest) => #14
        #14, #3 -> Bonsai.Vision.Crop(RegionOfInterest(X=7, Y=27, Width=22, Height=57)) => #15
        -> Bonsai.Dsp.Average
        -> MemberSelector(Selector=Val0) => #17
        #15 -> MemberSelector(Selector=Height) => #18
        #15 -> MemberSelector(Selector=Width) => #19
        #12 -> MemberSelector(Selector=Area)
        -> LastOrDefault => #21
        #19, #18, #17, #21 -> Zip
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression:
            new(
            Item1 as width,
            Item2 as height,
            Item3 as avgBright,
            Item4 as area
            )
        -> WorkflowOutput
    #1, #2 -> GroupWorkflow index4 => #6
        WorkflowInput Source2
        -> PropertyMapping(ThresholdValue) => #1
        WorkflowInput Source1
        -> Bonsai.Vision.Crop(RegionOfInterest(X=150, Y=208, Width=32, Height=91)) => #3
        #3, #1 -> Bonsai.Vision.Threshold(ThresholdValue=50, MaxValue=255, ThresholdType=Binary)
        -> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=375, MaxArea=nil)
        -> Bonsai.Vision.BinaryRegionAnalysis
        -> Index(Operand=IntProperty(Value=0)) => #7
        #3 -> Bonsai.Vision.Threshold(ThresholdValue=0, MaxValue=255, ThresholdType=Binary)
        -> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=200, MaxArea=nil)
        -> Bonsai.Vision.BinaryRegionAnalysis
        -> Index(Operand=IntProperty(Value=0)) => #11
        #7, #11 -> Catch => #12
        -> MemberSelector(Selector=Contour.Rect)
        -> PropertyMapping(RegionOfInterest) => #14
        #14, #3 -> Bonsai.Vision.Crop(RegionOfInterest(X=7, Y=27, Width=22, Height=57)) => #15
        -> Bonsai.Dsp.Average
        -> MemberSelector(Selector=Val0) => #17
        #15 -> MemberSelector(Selector=Height) => #18
        #15 -> MemberSelector(Selector=Width) => #19
        #12 -> MemberSelector(Selector=Area)
        -> LastOrDefault => #21
        #19, #18, #17, #21 -> Zip
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression:
            new(
            Item1 as width,
            Item2 as height,
            Item3 as avgBright,
            Item4 as area
            )
        -> WorkflowOutput
    #1, #2 -> GroupWorkflow index5 => #7
        WorkflowInput Source2
        -> PropertyMapping(ThresholdValue) => #1
        WorkflowInput Source1
        -> Bonsai.Vision.Crop(RegionOfInterest(X=150, Y=208, Width=32, Height=91)) => #3
        #3, #1 -> Bonsai.Vision.Threshold(ThresholdValue=50, MaxValue=255, ThresholdType=Binary)
        -> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=375, MaxArea=nil)
        -> Bonsai.Vision.BinaryRegionAnalysis
        -> Index(Operand=IntProperty(Value=0)) => #7
        #3 -> Bonsai.Vision.Threshold(ThresholdValue=0, MaxValue=255, ThresholdType=Binary)
        -> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=200, MaxArea=nil)
        -> Bonsai.Vision.BinaryRegionAnalysis
        -> Index(Operand=IntProperty(Value=0)) => #11
        #7, #11 -> Catch => #12
        -> MemberSelector(Selector=Contour.Rect)
        -> PropertyMapping(RegionOfInterest) => #14
        #14, #3 -> Bonsai.Vision.Crop(RegionOfInterest(X=7, Y=27, Width=22, Height=57)) => #15
        -> Bonsai.Dsp.Average
        -> MemberSelector(Selector=Val0) => #17
        #15 -> MemberSelector(Selector=Height) => #18
        #15 -> MemberSelector(Selector=Width) => #19
        #12 -> MemberSelector(Selector=Area)
        -> LastOrDefault => #21
        #19, #18, #17, #21 -> Zip
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression:
            new(
            Item1 as width,
            Item2 as height,
            Item3 as avgBright,
            Item4 as area
            )
        -> WorkflowOutput
    #1, #2 -> GroupWorkflow index6 => #8
        WorkflowInput Source2
        -> PropertyMapping(ThresholdValue) => #1
        WorkflowInput Source1
        -> Bonsai.Vision.Crop(RegionOfInterest(X=150, Y=208, Width=32, Height=91)) => #3
        #3, #1 -> Bonsai.Vision.Threshold(ThresholdValue=50, MaxValue=255, ThresholdType=Binary)
        -> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=375, MaxArea=nil)
        -> Bonsai.Vision.BinaryRegionAnalysis
        -> Index(Operand=IntProperty(Value=0)) => #7
        #3 -> Bonsai.Vision.Threshold(ThresholdValue=0, MaxValue=255, ThresholdType=Binary)
        -> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=200, MaxArea=nil)
        -> Bonsai.Vision.BinaryRegionAnalysis
        -> Index(Operand=IntProperty(Value=0)) => #11
        #7, #11 -> Catch => #12
        -> MemberSelector(Selector=Contour.Rect)
        -> PropertyMapping(RegionOfInterest) => #14
        #14, #3 -> Bonsai.Vision.Crop(RegionOfInterest(X=7, Y=27, Width=22, Height=57)) => #15
        -> Bonsai.Dsp.Average
        -> MemberSelector(Selector=Val0) => #17
        #15 -> MemberSelector(Selector=Height) => #18
        #15 -> MemberSelector(Selector=Width) => #19
        #12 -> MemberSelector(Selector=Area)
        -> LastOrDefault => #21
        #19, #18, #17, #21 -> Zip
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression:
            new(
            Item1 as width,
            Item2 as height,
            Item3 as avgBright,
            Item4 as area
            )
        -> WorkflowOutput
    #3, #4, #5, #6, #7, #8 -> Zip
    -> WorkflowOutput
#4, #5, #6, #7 -> Zip
-> Bonsai.Scripting.Expressions.ExpressionTransform
  Expression:
    new(
    Item1 as TopLeft,
    Item2 as TopRight,
    Item3 as BottomLeft,
    item4 as BottomRight

    )
-> Bonsai.IO.CsvWriter(FileName=output-5_2023-01-27_run-.csv, Append=false, Overwrite=false, Suffix=Timestamp, IncludeHeader=true)
#1 -> Bonsai.Vision.ImageHistogram
