WorkflowBuilder(Version=2.7.1)
Bonsai.Vision.FileCapture
  FileName="C:\Users\Andre Maia Chagas\Desktop\22.03.02 (FS)\307ab2022-03-02T12_52_47.avi"
  PlaybackRate=1000000
  StartPosition=0
  PositionUnits=Frames
  Loop=false
  Playing=true
-> Bonsai.Vision.Grayscale => #1
-> Bonsai.Vision.ImageHistogram
IntProperty(Value=60) => #3
#1, #3 -> GroupWorkflow TL-index1 => #4
    WorkflowInput Source2
    -> PropertyMapping(ThresholdValue) => #1
    WorkflowInput Source1
    -> Bonsai.Vision.Crop(RegionOfInterest(X=150, Y=208, Width=32, Height=91)) => #3
    #3, #1 -> Bonsai.Vision.Threshold(ThresholdValue=60, MaxValue=255, ThresholdType=Binary)
    -> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=375, MaxArea=nil)
    -> Bonsai.Vision.BinaryRegionAnalysis
    -> Index(Operand=IntProperty(Value=0)) => #7
    #3 -> Bonsai.Vision.Threshold(ThresholdValue=0, MaxValue=255, ThresholdType=Binary)
    -> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=200, MaxArea=nil)
    -> Bonsai.Vision.BinaryRegionAnalysis
    -> Index(Operand=IntProperty(Value=0)) => #11
    #7, #11 -> Catch => #12
    -> MemberSelector(Selector=Contour.Rect)
    -> PropertyMapping(RegionOfInterest) => #14
    #14, #3 -> Bonsai.Vision.Crop(RegionOfInterest(X=1, Y=1, Width=30, Height=89)) => #15
    -> Bonsai.Dsp.Average
    -> MemberSelector(Selector=Val0) => #17
    #15 -> MemberSelector(Selector=Height) => #18
    #15 -> MemberSelector(Selector=Width) => #19
    #19, #18, #17 -> Zip
    #12 -> MemberSelector(Selector=Area) => #21
    #19, #18, #17, #21 -> Zip => #22
    #12 -> Bonsai.Scripting.Expressions.ExpressionTransform => #23
      Expression: (!Single.isNaN(it.Centroid.X))
    #22, #23 -> WithLatestFrom
    -> MemberSelector(Selector=Item1)
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression:
        new(
        Item1 as width,
        Item2 as height,
        Item3 as avgBright,
        Item4 as area
        )
    -> WorkflowOutput
#1, #3 -> GroupWorkflow TL-index2 => #5
    WorkflowInput Source2
    -> PropertyMapping(ThresholdValue) => #1
    WorkflowInput Source1
    -> Bonsai.Vision.Crop(RegionOfInterest(X=150, Y=208, Width=32, Height=91)) => #3
    #3, #1 -> Bonsai.Vision.Threshold(ThresholdValue=60, MaxValue=255, ThresholdType=Binary)
    -> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=375, MaxArea=nil)
    -> Bonsai.Vision.BinaryRegionAnalysis
    -> Index(Operand=IntProperty(Value=0)) => #7
    #3 -> Bonsai.Vision.Threshold(ThresholdValue=0, MaxValue=255, ThresholdType=Binary)
    -> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=200, MaxArea=nil)
    -> Bonsai.Vision.BinaryRegionAnalysis
    -> Index(Operand=IntProperty(Value=0)) => #11
    #7, #11 -> Catch => #12
    -> MemberSelector(Selector=Contour.Rect)
    -> PropertyMapping(RegionOfInterest) => #14
    #14, #3 -> Bonsai.Vision.Crop(RegionOfInterest(X=1, Y=1, Width=30, Height=89)) => #15
    -> Bonsai.Dsp.Average
    -> MemberSelector(Selector=Val0) => #17
    #15 -> MemberSelector(Selector=Height) => #18
    #15 -> MemberSelector(Selector=Width) => #19
    #19, #18, #17 -> Zip
    #12 -> MemberSelector(Selector=Area) => #21
    #19, #18, #17, #21 -> Zip => #22
    #12 -> Bonsai.Scripting.Expressions.ExpressionTransform => #23
      Expression: (!Single.isNaN(it.Centroid.X))
    #22, #23 -> WithLatestFrom
    -> MemberSelector(Selector=Item1)
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression:
        new(
        Item1 as width,
        Item2 as height,
        Item3 as avgBright,
        Item4 as area
        )
    -> WorkflowOutput
#1, #3 -> GroupWorkflow TL-index3 => #6
    WorkflowInput Source2
    -> PropertyMapping(ThresholdValue) => #1
    WorkflowInput Source1
    -> Bonsai.Vision.Crop(RegionOfInterest(X=150, Y=208, Width=32, Height=91)) => #3
    #3, #1 -> Bonsai.Vision.Threshold(ThresholdValue=60, MaxValue=255, ThresholdType=Binary)
    -> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=375, MaxArea=nil)
    -> Bonsai.Vision.BinaryRegionAnalysis
    -> Index(Operand=IntProperty(Value=0)) => #7
    #3 -> Bonsai.Vision.Threshold(ThresholdValue=0, MaxValue=255, ThresholdType=Binary)
    -> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=200, MaxArea=nil)
    -> Bonsai.Vision.BinaryRegionAnalysis
    -> Index(Operand=IntProperty(Value=0)) => #11
    #7, #11 -> Catch => #12
    -> MemberSelector(Selector=Contour.Rect)
    -> PropertyMapping(RegionOfInterest) => #14
    #14, #3 -> Bonsai.Vision.Crop(RegionOfInterest(X=1, Y=1, Width=30, Height=89)) => #15
    -> Bonsai.Dsp.Average
    -> MemberSelector(Selector=Val0) => #17
    #15 -> MemberSelector(Selector=Height) => #18
    #15 -> MemberSelector(Selector=Width) => #19
    #19, #18, #17 -> Zip
    #12 -> MemberSelector(Selector=Area) => #21
    #19, #18, #17, #21 -> Zip => #22
    #12 -> Bonsai.Scripting.Expressions.ExpressionTransform => #23
      Expression: (!Single.isNaN(it.Centroid.X))
    #22, #23 -> WithLatestFrom
    -> MemberSelector(Selector=Item1)
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression:
        new(
        Item1 as width,
        Item2 as height,
        Item3 as avgBright,
        Item4 as area
        )
    -> WorkflowOutput
#1, #3 -> GroupWorkflow TL-index4 => #7
    WorkflowInput Source2
    -> PropertyMapping(ThresholdValue) => #1
    WorkflowInput Source1
    -> Bonsai.Vision.Crop(RegionOfInterest(X=150, Y=208, Width=32, Height=91)) => #3
    #3, #1 -> Bonsai.Vision.Threshold(ThresholdValue=60, MaxValue=255, ThresholdType=Binary)
    -> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=375, MaxArea=nil)
    -> Bonsai.Vision.BinaryRegionAnalysis
    -> Index(Operand=IntProperty(Value=0)) => #7
    #3 -> Bonsai.Vision.Threshold(ThresholdValue=0, MaxValue=255, ThresholdType=Binary)
    -> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=200, MaxArea=nil)
    -> Bonsai.Vision.BinaryRegionAnalysis
    -> Index(Operand=IntProperty(Value=0)) => #11
    #7, #11 -> Catch => #12
    -> MemberSelector(Selector=Contour.Rect)
    -> PropertyMapping(RegionOfInterest) => #14
    #14, #3 -> Bonsai.Vision.Crop(RegionOfInterest(X=1, Y=1, Width=30, Height=89)) => #15
    -> Bonsai.Dsp.Average
    -> MemberSelector(Selector=Val0) => #17
    #15 -> MemberSelector(Selector=Height) => #18
    #15 -> MemberSelector(Selector=Width) => #19
    #19, #18, #17 -> Zip
    #12 -> MemberSelector(Selector=Area) => #21
    #19, #18, #17, #21 -> Zip => #22
    #12 -> Bonsai.Scripting.Expressions.ExpressionTransform => #23
      Expression: (!Single.isNaN(it.Centroid.X))
    #22, #23 -> WithLatestFrom
    -> MemberSelector(Selector=Item1)
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression:
        new(
        Item1 as width,
        Item2 as height,
        Item3 as avgBright,
        Item4 as area
        )
    -> WorkflowOutput
#1, #3 -> GroupWorkflow TL-index5 => #8
    WorkflowInput Source2
    -> PropertyMapping(ThresholdValue) => #1
    WorkflowInput Source1
    -> Bonsai.Vision.Crop(RegionOfInterest(X=150, Y=208, Width=32, Height=91)) => #3
    #3, #1 -> Bonsai.Vision.Threshold(ThresholdValue=60, MaxValue=255, ThresholdType=Binary)
    -> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=375, MaxArea=nil)
    -> Bonsai.Vision.BinaryRegionAnalysis
    -> Index(Operand=IntProperty(Value=0)) => #7
    #3 -> Bonsai.Vision.Threshold(ThresholdValue=0, MaxValue=255, ThresholdType=Binary)
    -> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=200, MaxArea=nil)
    -> Bonsai.Vision.BinaryRegionAnalysis
    -> Index(Operand=IntProperty(Value=0)) => #11
    #7, #11 -> Catch => #12
    -> MemberSelector(Selector=Contour.Rect)
    -> PropertyMapping(RegionOfInterest) => #14
    #14, #3 -> Bonsai.Vision.Crop(RegionOfInterest(X=1, Y=1, Width=30, Height=89)) => #15
    -> Bonsai.Dsp.Average
    -> MemberSelector(Selector=Val0) => #17
    #15 -> MemberSelector(Selector=Height) => #18
    #15 -> MemberSelector(Selector=Width) => #19
    #19, #18, #17 -> Zip
    #12 -> MemberSelector(Selector=Area) => #21
    #19, #18, #17, #21 -> Zip => #22
    #12 -> Bonsai.Scripting.Expressions.ExpressionTransform => #23
      Expression: (!Single.isNaN(it.Centroid.X))
    #22, #23 -> WithLatestFrom
    -> MemberSelector(Selector=Item1)
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression:
        new(
        Item1 as width,
        Item2 as height,
        Item3 as avgBright,
        Item4 as area
        )
    -> WorkflowOutput
#1, #3 -> GroupWorkflow TL-index6 => #9
    WorkflowInput Source2
    -> PropertyMapping(ThresholdValue) => #1
    WorkflowInput Source1
    -> Bonsai.Vision.Crop(RegionOfInterest(X=150, Y=208, Width=32, Height=91)) => #3
    #3, #1 -> Bonsai.Vision.Threshold(ThresholdValue=60, MaxValue=255, ThresholdType=Binary)
    -> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=375, MaxArea=nil)
    -> Bonsai.Vision.BinaryRegionAnalysis
    -> Index(Operand=IntProperty(Value=0)) => #7
    #3 -> Bonsai.Vision.Threshold(ThresholdValue=0, MaxValue=255, ThresholdType=Binary)
    -> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=200, MaxArea=nil)
    -> Bonsai.Vision.BinaryRegionAnalysis
    -> Index(Operand=IntProperty(Value=0)) => #11
    #7, #11 -> Catch => #12
    -> MemberSelector(Selector=Contour.Rect)
    -> PropertyMapping(RegionOfInterest) => #14
    #14, #3 -> Bonsai.Vision.Crop(RegionOfInterest(X=1, Y=1, Width=30, Height=89)) => #15
    -> Bonsai.Dsp.Average
    -> MemberSelector(Selector=Val0) => #17
    #15 -> MemberSelector(Selector=Height) => #18
    #15 -> MemberSelector(Selector=Width) => #19
    #19, #18, #17 -> Zip
    #12 -> MemberSelector(Selector=Area) => #21
    #19, #18, #17, #21 -> Zip => #22
    #12 -> Bonsai.Scripting.Expressions.ExpressionTransform => #23
      Expression: (!Single.isNaN(it.Centroid.X))
    #22, #23 -> WithLatestFrom
    -> MemberSelector(Selector=Item1)
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression:
        new(
        Item1 as width,
        Item2 as height,
        Item3 as avgBright,
        Item4 as area
        )
    -> WorkflowOutput
#4, #5, #6, #7, #8, #9 -> Zip => #10
#1, #3 -> GroupWorkflow TR-index1 => #11
    WorkflowInput Source2
    -> PropertyMapping(ThresholdValue) => #1
    WorkflowInput Source1
    -> Bonsai.Vision.Crop(RegionOfInterest(X=150, Y=208, Width=32, Height=91)) => #3
    #3, #1 -> Bonsai.Vision.Threshold(ThresholdValue=60, MaxValue=255, ThresholdType=Binary)
    -> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=375, MaxArea=nil)
    -> Bonsai.Vision.BinaryRegionAnalysis
    -> Index(Operand=IntProperty(Value=0)) => #7
    #3 -> Bonsai.Vision.Threshold(ThresholdValue=0, MaxValue=255, ThresholdType=Binary)
    -> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=200, MaxArea=nil)
    -> Bonsai.Vision.BinaryRegionAnalysis
    -> Index(Operand=IntProperty(Value=0)) => #11
    #7, #11 -> Catch => #12
    -> MemberSelector(Selector=Contour.Rect)
    -> PropertyMapping(RegionOfInterest) => #14
    #14, #3 -> Bonsai.Vision.Crop(RegionOfInterest(X=1, Y=1, Width=30, Height=89)) => #15
    -> Bonsai.Dsp.Average
    -> MemberSelector(Selector=Val0) => #17
    #15 -> MemberSelector(Selector=Height) => #18
    #15 -> MemberSelector(Selector=Width) => #19
    #19, #18, #17 -> Zip
    #12 -> MemberSelector(Selector=Area) => #21
    #19, #18, #17, #21 -> Zip => #22
    #12 -> Bonsai.Scripting.Expressions.ExpressionTransform => #23
      Expression: (!Single.isNaN(it.Centroid.X))
    #22, #23 -> WithLatestFrom
    -> MemberSelector(Selector=Item1)
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression:
        new(
        Item1 as width,
        Item2 as height,
        Item3 as avgBright,
        Item4 as area
        )
    -> WorkflowOutput
#1, #3 -> GroupWorkflow TR-index2 => #12
    WorkflowInput Source2
    -> PropertyMapping(ThresholdValue) => #1
    WorkflowInput Source1
    -> Bonsai.Vision.Crop(RegionOfInterest(X=150, Y=208, Width=32, Height=91)) => #3
    #3, #1 -> Bonsai.Vision.Threshold(ThresholdValue=60, MaxValue=255, ThresholdType=Binary)
    -> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=375, MaxArea=nil)
    -> Bonsai.Vision.BinaryRegionAnalysis
    -> Index(Operand=IntProperty(Value=0)) => #7
    #3 -> Bonsai.Vision.Threshold(ThresholdValue=0, MaxValue=255, ThresholdType=Binary)
    -> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=200, MaxArea=nil)
    -> Bonsai.Vision.BinaryRegionAnalysis
    -> Index(Operand=IntProperty(Value=0)) => #11
    #7, #11 -> Catch => #12
    -> MemberSelector(Selector=Contour.Rect)
    -> PropertyMapping(RegionOfInterest) => #14
    #14, #3 -> Bonsai.Vision.Crop(RegionOfInterest(X=1, Y=1, Width=30, Height=89)) => #15
    -> Bonsai.Dsp.Average
    -> MemberSelector(Selector=Val0) => #17
    #15 -> MemberSelector(Selector=Height) => #18
    #15 -> MemberSelector(Selector=Width) => #19
    #19, #18, #17 -> Zip
    #12 -> MemberSelector(Selector=Area) => #21
    #19, #18, #17, #21 -> Zip => #22
    #12 -> Bonsai.Scripting.Expressions.ExpressionTransform => #23
      Expression: (!Single.isNaN(it.Centroid.X))
    #22, #23 -> WithLatestFrom
    -> MemberSelector(Selector=Item1)
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression:
        new(
        Item1 as width,
        Item2 as height,
        Item3 as avgBright,
        Item4 as area
        )
    -> WorkflowOutput
#1, #3 -> GroupWorkflow TR-index3 => #13
    WorkflowInput Source2
    -> PropertyMapping(ThresholdValue) => #1
    WorkflowInput Source1
    -> Bonsai.Vision.Crop(RegionOfInterest(X=150, Y=208, Width=32, Height=91)) => #3
    #3, #1 -> Bonsai.Vision.Threshold(ThresholdValue=60, MaxValue=255, ThresholdType=Binary)
    -> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=375, MaxArea=nil)
    -> Bonsai.Vision.BinaryRegionAnalysis
    -> Index(Operand=IntProperty(Value=0)) => #7
    #3 -> Bonsai.Vision.Threshold(ThresholdValue=0, MaxValue=255, ThresholdType=Binary)
    -> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=200, MaxArea=nil)
    -> Bonsai.Vision.BinaryRegionAnalysis
    -> Index(Operand=IntProperty(Value=0)) => #11
    #7, #11 -> Catch => #12
    -> MemberSelector(Selector=Contour.Rect)
    -> PropertyMapping(RegionOfInterest) => #14
    #14, #3 -> Bonsai.Vision.Crop(RegionOfInterest(X=1, Y=1, Width=30, Height=89)) => #15
    -> Bonsai.Dsp.Average
    -> MemberSelector(Selector=Val0) => #17
    #15 -> MemberSelector(Selector=Height) => #18
    #15 -> MemberSelector(Selector=Width) => #19
    #19, #18, #17 -> Zip
    #12 -> MemberSelector(Selector=Area) => #21
    #19, #18, #17, #21 -> Zip => #22
    #12 -> Bonsai.Scripting.Expressions.ExpressionTransform => #23
      Expression: (!Single.isNaN(it.Centroid.X))
    #22, #23 -> WithLatestFrom
    -> MemberSelector(Selector=Item1)
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression:
        new(
        Item1 as width,
        Item2 as height,
        Item3 as avgBright,
        Item4 as area
        )
    -> WorkflowOutput
#1, #3 -> GroupWorkflow TR-index4 => #14
    WorkflowInput Source2
    -> PropertyMapping(ThresholdValue) => #1
    WorkflowInput Source1
    -> Bonsai.Vision.Crop(RegionOfInterest(X=150, Y=208, Width=32, Height=91)) => #3
    #3, #1 -> Bonsai.Vision.Threshold(ThresholdValue=60, MaxValue=255, ThresholdType=Binary)
    -> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=375, MaxArea=nil)
    -> Bonsai.Vision.BinaryRegionAnalysis
    -> Index(Operand=IntProperty(Value=0)) => #7
    #3 -> Bonsai.Vision.Threshold(ThresholdValue=0, MaxValue=255, ThresholdType=Binary)
    -> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=200, MaxArea=nil)
    -> Bonsai.Vision.BinaryRegionAnalysis
    -> Index(Operand=IntProperty(Value=0)) => #11
    #7, #11 -> Catch => #12
    -> MemberSelector(Selector=Contour.Rect)
    -> PropertyMapping(RegionOfInterest) => #14
    #14, #3 -> Bonsai.Vision.Crop(RegionOfInterest(X=1, Y=1, Width=30, Height=89)) => #15
    -> Bonsai.Dsp.Average
    -> MemberSelector(Selector=Val0) => #17
    #15 -> MemberSelector(Selector=Height) => #18
    #15 -> MemberSelector(Selector=Width) => #19
    #19, #18, #17 -> Zip
    #12 -> MemberSelector(Selector=Area) => #21
    #19, #18, #17, #21 -> Zip => #22
    #12 -> Bonsai.Scripting.Expressions.ExpressionTransform => #23
      Expression: (!Single.isNaN(it.Centroid.X))
    #22, #23 -> WithLatestFrom
    -> MemberSelector(Selector=Item1)
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression:
        new(
        Item1 as width,
        Item2 as height,
        Item3 as avgBright,
        Item4 as area
        )
    -> WorkflowOutput
#1, #3 -> GroupWorkflow TR-index5 => #15
    WorkflowInput Source2
    -> PropertyMapping(ThresholdValue) => #1
    WorkflowInput Source1
    -> Bonsai.Vision.Crop(RegionOfInterest(X=150, Y=208, Width=32, Height=91)) => #3
    #3, #1 -> Bonsai.Vision.Threshold(ThresholdValue=60, MaxValue=255, ThresholdType=Binary)
    -> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=375, MaxArea=nil)
    -> Bonsai.Vision.BinaryRegionAnalysis
    -> Index(Operand=IntProperty(Value=0)) => #7
    #3 -> Bonsai.Vision.Threshold(ThresholdValue=0, MaxValue=255, ThresholdType=Binary)
    -> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=200, MaxArea=nil)
    -> Bonsai.Vision.BinaryRegionAnalysis
    -> Index(Operand=IntProperty(Value=0)) => #11
    #7, #11 -> Catch => #12
    -> MemberSelector(Selector=Contour.Rect)
    -> PropertyMapping(RegionOfInterest) => #14
    #14, #3 -> Bonsai.Vision.Crop(RegionOfInterest(X=1, Y=1, Width=30, Height=89)) => #15
    -> Bonsai.Dsp.Average
    -> MemberSelector(Selector=Val0) => #17
    #15 -> MemberSelector(Selector=Height) => #18
    #15 -> MemberSelector(Selector=Width) => #19
    #19, #18, #17 -> Zip
    #12 -> MemberSelector(Selector=Area) => #21
    #19, #18, #17, #21 -> Zip => #22
    #12 -> Bonsai.Scripting.Expressions.ExpressionTransform => #23
      Expression: (!Single.isNaN(it.Centroid.X))
    #22, #23 -> WithLatestFrom
    -> MemberSelector(Selector=Item1)
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression:
        new(
        Item1 as width,
        Item2 as height,
        Item3 as avgBright,
        Item4 as area
        )
    -> WorkflowOutput
#1, #3 -> GroupWorkflow TR-index6 => #16
    WorkflowInput Source2
    -> PropertyMapping(ThresholdValue) => #1
    WorkflowInput Source1
    -> Bonsai.Vision.Crop(RegionOfInterest(X=150, Y=208, Width=32, Height=91)) => #3
    #3, #1 -> Bonsai.Vision.Threshold(ThresholdValue=60, MaxValue=255, ThresholdType=Binary)
    -> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=375, MaxArea=nil)
    -> Bonsai.Vision.BinaryRegionAnalysis
    -> Index(Operand=IntProperty(Value=0)) => #7
    #3 -> Bonsai.Vision.Threshold(ThresholdValue=0, MaxValue=255, ThresholdType=Binary)
    -> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=200, MaxArea=nil)
    -> Bonsai.Vision.BinaryRegionAnalysis
    -> Index(Operand=IntProperty(Value=0)) => #11
    #7, #11 -> Catch => #12
    -> MemberSelector(Selector=Contour.Rect)
    -> PropertyMapping(RegionOfInterest) => #14
    #14, #3 -> Bonsai.Vision.Crop(RegionOfInterest(X=1, Y=1, Width=30, Height=89)) => #15
    -> Bonsai.Dsp.Average
    -> MemberSelector(Selector=Val0) => #17
    #15 -> MemberSelector(Selector=Height) => #18
    #15 -> MemberSelector(Selector=Width) => #19
    #19, #18, #17 -> Zip
    #12 -> MemberSelector(Selector=Area) => #21
    #19, #18, #17, #21 -> Zip => #22
    #12 -> Bonsai.Scripting.Expressions.ExpressionTransform => #23
      Expression: (!Single.isNaN(it.Centroid.X))
    #22, #23 -> WithLatestFrom
    -> MemberSelector(Selector=Item1)
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression:
        new(
        Item1 as width,
        Item2 as height,
        Item3 as avgBright,
        Item4 as area
        )
    -> WorkflowOutput
#11, #12, #13, #14, #15, #16 -> Zip => #17
#1, #3 -> GroupWorkflow BL-index1 => #18
    WorkflowInput Source2
    -> PropertyMapping(ThresholdValue) => #1
    WorkflowInput Source1
    -> Bonsai.Vision.Crop(RegionOfInterest(X=150, Y=208, Width=32, Height=91)) => #3
    #3, #1 -> Bonsai.Vision.Threshold(ThresholdValue=60, MaxValue=255, ThresholdType=Binary)
    -> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=375, MaxArea=nil)
    -> Bonsai.Vision.BinaryRegionAnalysis
    -> Index(Operand=IntProperty(Value=0)) => #7
    #3 -> Bonsai.Vision.Threshold(ThresholdValue=0, MaxValue=255, ThresholdType=Binary)
    -> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=200, MaxArea=nil)
    -> Bonsai.Vision.BinaryRegionAnalysis
    -> Index(Operand=IntProperty(Value=0)) => #11
    #7, #11 -> Catch => #12
    -> MemberSelector(Selector=Contour.Rect)
    -> PropertyMapping(RegionOfInterest) => #14
    #14, #3 -> Bonsai.Vision.Crop(RegionOfInterest(X=1, Y=1, Width=30, Height=89)) => #15
    -> Bonsai.Dsp.Average
    -> MemberSelector(Selector=Val0) => #17
    #15 -> MemberSelector(Selector=Height) => #18
    #15 -> MemberSelector(Selector=Width) => #19
    #19, #18, #17 -> Zip
    #12 -> MemberSelector(Selector=Area) => #21
    #19, #18, #17, #21 -> Zip => #22
    #12 -> Bonsai.Scripting.Expressions.ExpressionTransform => #23
      Expression: (!Single.isNaN(it.Centroid.X))
    #22, #23 -> WithLatestFrom
    -> MemberSelector(Selector=Item1)
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression:
        new(
        Item1 as width,
        Item2 as height,
        Item3 as avgBright,
        Item4 as area
        )
    -> WorkflowOutput
#1, #3 -> GroupWorkflow BL-index2 => #19
    WorkflowInput Source2
    -> PropertyMapping(ThresholdValue) => #1
    WorkflowInput Source1
    -> Bonsai.Vision.Crop(RegionOfInterest(X=150, Y=208, Width=32, Height=91)) => #3
    #3, #1 -> Bonsai.Vision.Threshold(ThresholdValue=60, MaxValue=255, ThresholdType=Binary)
    -> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=375, MaxArea=nil)
    -> Bonsai.Vision.BinaryRegionAnalysis
    -> Index(Operand=IntProperty(Value=0)) => #7
    #3 -> Bonsai.Vision.Threshold(ThresholdValue=0, MaxValue=255, ThresholdType=Binary)
    -> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=200, MaxArea=nil)
    -> Bonsai.Vision.BinaryRegionAnalysis
    -> Index(Operand=IntProperty(Value=0)) => #11
    #7, #11 -> Catch => #12
    -> MemberSelector(Selector=Contour.Rect)
    -> PropertyMapping(RegionOfInterest) => #14
    #14, #3 -> Bonsai.Vision.Crop(RegionOfInterest(X=1, Y=1, Width=30, Height=89)) => #15
    -> Bonsai.Dsp.Average
    -> MemberSelector(Selector=Val0) => #17
    #15 -> MemberSelector(Selector=Height) => #18
    #15 -> MemberSelector(Selector=Width) => #19
    #19, #18, #17 -> Zip
    #12 -> MemberSelector(Selector=Area) => #21
    #19, #18, #17, #21 -> Zip => #22
    #12 -> Bonsai.Scripting.Expressions.ExpressionTransform => #23
      Expression: (!Single.isNaN(it.Centroid.X))
    #22, #23 -> WithLatestFrom
    -> MemberSelector(Selector=Item1)
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression:
        new(
        Item1 as width,
        Item2 as height,
        Item3 as avgBright,
        Item4 as area
        )
    -> WorkflowOutput
#1, #3 -> GroupWorkflow BL-index3 => #20
    WorkflowInput Source2
    -> PropertyMapping(ThresholdValue) => #1
    WorkflowInput Source1
    -> Bonsai.Vision.Crop(RegionOfInterest(X=150, Y=208, Width=32, Height=91)) => #3
    #3, #1 -> Bonsai.Vision.Threshold(ThresholdValue=60, MaxValue=255, ThresholdType=Binary)
    -> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=375, MaxArea=nil)
    -> Bonsai.Vision.BinaryRegionAnalysis
    -> Index(Operand=IntProperty(Value=0)) => #7
    #3 -> Bonsai.Vision.Threshold(ThresholdValue=0, MaxValue=255, ThresholdType=Binary)
    -> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=200, MaxArea=nil)
    -> Bonsai.Vision.BinaryRegionAnalysis
    -> Index(Operand=IntProperty(Value=0)) => #11
    #7, #11 -> Catch => #12
    -> MemberSelector(Selector=Contour.Rect)
    -> PropertyMapping(RegionOfInterest) => #14
    #14, #3 -> Bonsai.Vision.Crop(RegionOfInterest(X=1, Y=1, Width=30, Height=89)) => #15
    -> Bonsai.Dsp.Average
    -> MemberSelector(Selector=Val0) => #17
    #15 -> MemberSelector(Selector=Height) => #18
    #15 -> MemberSelector(Selector=Width) => #19
    #19, #18, #17 -> Zip
    #12 -> MemberSelector(Selector=Area) => #21
    #19, #18, #17, #21 -> Zip => #22
    #12 -> Bonsai.Scripting.Expressions.ExpressionTransform => #23
      Expression: (!Single.isNaN(it.Centroid.X))
    #22, #23 -> WithLatestFrom
    -> MemberSelector(Selector=Item1)
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression:
        new(
        Item1 as width,
        Item2 as height,
        Item3 as avgBright,
        Item4 as area
        )
    -> WorkflowOutput
#1, #3 -> GroupWorkflow BL-index4 => #21
    WorkflowInput Source2
    -> PropertyMapping(ThresholdValue) => #1
    WorkflowInput Source1
    -> Bonsai.Vision.Crop(RegionOfInterest(X=150, Y=208, Width=32, Height=91)) => #3
    #3, #1 -> Bonsai.Vision.Threshold(ThresholdValue=60, MaxValue=255, ThresholdType=Binary)
    -> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=375, MaxArea=nil)
    -> Bonsai.Vision.BinaryRegionAnalysis
    -> Index(Operand=IntProperty(Value=0)) => #7
    #3 -> Bonsai.Vision.Threshold(ThresholdValue=0, MaxValue=255, ThresholdType=Binary)
    -> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=200, MaxArea=nil)
    -> Bonsai.Vision.BinaryRegionAnalysis
    -> Index(Operand=IntProperty(Value=0)) => #11
    #7, #11 -> Catch => #12
    -> MemberSelector(Selector=Contour.Rect)
    -> PropertyMapping(RegionOfInterest) => #14
    #14, #3 -> Bonsai.Vision.Crop(RegionOfInterest(X=1, Y=1, Width=30, Height=89)) => #15
    -> Bonsai.Dsp.Average
    -> MemberSelector(Selector=Val0) => #17
    #15 -> MemberSelector(Selector=Height) => #18
    #15 -> MemberSelector(Selector=Width) => #19
    #19, #18, #17 -> Zip
    #12 -> MemberSelector(Selector=Area) => #21
    #19, #18, #17, #21 -> Zip => #22
    #12 -> Bonsai.Scripting.Expressions.ExpressionTransform => #23
      Expression: (!Single.isNaN(it.Centroid.X))
    #22, #23 -> WithLatestFrom
    -> MemberSelector(Selector=Item1)
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression:
        new(
        Item1 as width,
        Item2 as height,
        Item3 as avgBright,
        Item4 as area
        )
    -> WorkflowOutput
#1, #3 -> GroupWorkflow BL-index5 => #22
    WorkflowInput Source2
    -> PropertyMapping(ThresholdValue) => #1
    WorkflowInput Source1
    -> Bonsai.Vision.Crop(RegionOfInterest(X=150, Y=208, Width=32, Height=91)) => #3
    #3, #1 -> Bonsai.Vision.Threshold(ThresholdValue=60, MaxValue=255, ThresholdType=Binary)
    -> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=375, MaxArea=nil)
    -> Bonsai.Vision.BinaryRegionAnalysis
    -> Index(Operand=IntProperty(Value=0)) => #7
    #3 -> Bonsai.Vision.Threshold(ThresholdValue=0, MaxValue=255, ThresholdType=Binary)
    -> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=200, MaxArea=nil)
    -> Bonsai.Vision.BinaryRegionAnalysis
    -> Index(Operand=IntProperty(Value=0)) => #11
    #7, #11 -> Catch => #12
    -> MemberSelector(Selector=Contour.Rect)
    -> PropertyMapping(RegionOfInterest) => #14
    #14, #3 -> Bonsai.Vision.Crop(RegionOfInterest(X=1, Y=1, Width=30, Height=89)) => #15
    -> Bonsai.Dsp.Average
    -> MemberSelector(Selector=Val0) => #17
    #15 -> MemberSelector(Selector=Height) => #18
    #15 -> MemberSelector(Selector=Width) => #19
    #19, #18, #17 -> Zip
    #12 -> MemberSelector(Selector=Area) => #21
    #19, #18, #17, #21 -> Zip => #22
    #12 -> Bonsai.Scripting.Expressions.ExpressionTransform => #23
      Expression: (!Single.isNaN(it.Centroid.X))
    #22, #23 -> WithLatestFrom
    -> MemberSelector(Selector=Item1)
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression:
        new(
        Item1 as width,
        Item2 as height,
        Item3 as avgBright,
        Item4 as area
        )
    -> WorkflowOutput
#1, #3 -> GroupWorkflow BL-index6 => #23
    WorkflowInput Source2
    -> PropertyMapping(ThresholdValue) => #1
    WorkflowInput Source1
    -> Bonsai.Vision.Crop(RegionOfInterest(X=150, Y=208, Width=32, Height=91)) => #3
    #3, #1 -> Bonsai.Vision.Threshold(ThresholdValue=60, MaxValue=255, ThresholdType=Binary)
    -> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=375, MaxArea=nil)
    -> Bonsai.Vision.BinaryRegionAnalysis
    -> Index(Operand=IntProperty(Value=0)) => #7
    #3 -> Bonsai.Vision.Threshold(ThresholdValue=0, MaxValue=255, ThresholdType=Binary)
    -> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=200, MaxArea=nil)
    -> Bonsai.Vision.BinaryRegionAnalysis
    -> Index(Operand=IntProperty(Value=0)) => #11
    #7, #11 -> Catch => #12
    -> MemberSelector(Selector=Contour.Rect)
    -> PropertyMapping(RegionOfInterest) => #14
    #14, #3 -> Bonsai.Vision.Crop(RegionOfInterest(X=1, Y=1, Width=30, Height=89)) => #15
    -> Bonsai.Dsp.Average
    -> MemberSelector(Selector=Val0) => #17
    #15 -> MemberSelector(Selector=Height) => #18
    #15 -> MemberSelector(Selector=Width) => #19
    #19, #18, #17 -> Zip
    #12 -> MemberSelector(Selector=Area) => #21
    #19, #18, #17, #21 -> Zip => #22
    #12 -> Bonsai.Scripting.Expressions.ExpressionTransform => #23
      Expression: (!Single.isNaN(it.Centroid.X))
    #22, #23 -> WithLatestFrom
    -> MemberSelector(Selector=Item1)
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression:
        new(
        Item1 as width,
        Item2 as height,
        Item3 as avgBright,
        Item4 as area
        )
    -> WorkflowOutput
#18, #19, #20, #21, #22, #23 -> Zip => #24
#1, #3 -> GroupWorkflow BR-index1 => #25
    WorkflowInput Source2
    -> PropertyMapping(ThresholdValue) => #1
    WorkflowInput Source1
    -> Bonsai.Vision.Crop(RegionOfInterest(X=150, Y=208, Width=32, Height=91)) => #3
    #3, #1 -> Bonsai.Vision.Threshold(ThresholdValue=60, MaxValue=255, ThresholdType=Binary)
    -> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=375, MaxArea=nil)
    -> Bonsai.Vision.BinaryRegionAnalysis
    -> Index(Operand=IntProperty(Value=0)) => #7
    #3 -> Bonsai.Vision.Threshold(ThresholdValue=0, MaxValue=255, ThresholdType=Binary)
    -> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=200, MaxArea=nil)
    -> Bonsai.Vision.BinaryRegionAnalysis
    -> Index(Operand=IntProperty(Value=0)) => #11
    #7, #11 -> Catch => #12
    -> MemberSelector(Selector=Contour.Rect)
    -> PropertyMapping(RegionOfInterest) => #14
    #14, #3 -> Bonsai.Vision.Crop(RegionOfInterest(X=1, Y=1, Width=30, Height=89)) => #15
    -> Bonsai.Dsp.Average
    -> MemberSelector(Selector=Val0) => #17
    #15 -> MemberSelector(Selector=Height) => #18
    #15 -> MemberSelector(Selector=Width) => #19
    #19, #18, #17 -> Zip
    #12 -> MemberSelector(Selector=Area) => #21
    #19, #18, #17, #21 -> Zip => #22
    #12 -> Bonsai.Scripting.Expressions.ExpressionTransform => #23
      Expression: (!Single.isNaN(it.Centroid.X))
    #22, #23 -> WithLatestFrom
    -> MemberSelector(Selector=Item1)
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression:
        new(
        Item1 as width,
        Item2 as height,
        Item3 as avgBright,
        Item4 as area
        )
    -> WorkflowOutput
#1, #3 -> GroupWorkflow BR-index2 => #26
    WorkflowInput Source2
    -> PropertyMapping(ThresholdValue) => #1
    WorkflowInput Source1
    -> Bonsai.Vision.Crop(RegionOfInterest(X=150, Y=208, Width=32, Height=91)) => #3
    #3, #1 -> Bonsai.Vision.Threshold(ThresholdValue=60, MaxValue=255, ThresholdType=Binary)
    -> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=375, MaxArea=nil)
    -> Bonsai.Vision.BinaryRegionAnalysis
    -> Index(Operand=IntProperty(Value=0)) => #7
    #3 -> Bonsai.Vision.Threshold(ThresholdValue=0, MaxValue=255, ThresholdType=Binary)
    -> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=200, MaxArea=nil)
    -> Bonsai.Vision.BinaryRegionAnalysis
    -> Index(Operand=IntProperty(Value=0)) => #11
    #7, #11 -> Catch => #12
    -> MemberSelector(Selector=Contour.Rect)
    -> PropertyMapping(RegionOfInterest) => #14
    #14, #3 -> Bonsai.Vision.Crop(RegionOfInterest(X=1, Y=1, Width=30, Height=89)) => #15
    -> Bonsai.Dsp.Average
    -> MemberSelector(Selector=Val0) => #17
    #15 -> MemberSelector(Selector=Height) => #18
    #15 -> MemberSelector(Selector=Width) => #19
    #19, #18, #17 -> Zip
    #12 -> MemberSelector(Selector=Area) => #21
    #19, #18, #17, #21 -> Zip => #22
    #12 -> Bonsai.Scripting.Expressions.ExpressionTransform => #23
      Expression: (!Single.isNaN(it.Centroid.X))
    #22, #23 -> WithLatestFrom
    -> MemberSelector(Selector=Item1)
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression:
        new(
        Item1 as width,
        Item2 as height,
        Item3 as avgBright,
        Item4 as area
        )
    -> WorkflowOutput
#1, #3 -> GroupWorkflow BR-index3 => #27
    WorkflowInput Source2
    -> PropertyMapping(ThresholdValue) => #1
    WorkflowInput Source1
    -> Bonsai.Vision.Crop(RegionOfInterest(X=150, Y=208, Width=32, Height=91)) => #3
    #3, #1 -> Bonsai.Vision.Threshold(ThresholdValue=60, MaxValue=255, ThresholdType=Binary)
    -> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=375, MaxArea=nil)
    -> Bonsai.Vision.BinaryRegionAnalysis
    -> Index(Operand=IntProperty(Value=0)) => #7
    #3 -> Bonsai.Vision.Threshold(ThresholdValue=0, MaxValue=255, ThresholdType=Binary)
    -> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=200, MaxArea=nil)
    -> Bonsai.Vision.BinaryRegionAnalysis
    -> Index(Operand=IntProperty(Value=0)) => #11
    #7, #11 -> Catch => #12
    -> MemberSelector(Selector=Contour.Rect)
    -> PropertyMapping(RegionOfInterest) => #14
    #14, #3 -> Bonsai.Vision.Crop(RegionOfInterest(X=1, Y=1, Width=30, Height=89)) => #15
    -> Bonsai.Dsp.Average
    -> MemberSelector(Selector=Val0) => #17
    #15 -> MemberSelector(Selector=Height) => #18
    #15 -> MemberSelector(Selector=Width) => #19
    #19, #18, #17 -> Zip
    #12 -> MemberSelector(Selector=Area) => #21
    #19, #18, #17, #21 -> Zip => #22
    #12 -> Bonsai.Scripting.Expressions.ExpressionTransform => #23
      Expression: (!Single.isNaN(it.Centroid.X))
    #22, #23 -> WithLatestFrom
    -> MemberSelector(Selector=Item1)
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression:
        new(
        Item1 as width,
        Item2 as height,
        Item3 as avgBright,
        Item4 as area
        )
    -> WorkflowOutput
#1, #3 -> GroupWorkflow BR-index4 => #28
    WorkflowInput Source2
    -> PropertyMapping(ThresholdValue) => #1
    WorkflowInput Source1
    -> Bonsai.Vision.Crop(RegionOfInterest(X=150, Y=208, Width=32, Height=91)) => #3
    #3, #1 -> Bonsai.Vision.Threshold(ThresholdValue=60, MaxValue=255, ThresholdType=Binary)
    -> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=375, MaxArea=nil)
    -> Bonsai.Vision.BinaryRegionAnalysis
    -> Index(Operand=IntProperty(Value=0)) => #7
    #3 -> Bonsai.Vision.Threshold(ThresholdValue=0, MaxValue=255, ThresholdType=Binary)
    -> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=200, MaxArea=nil)
    -> Bonsai.Vision.BinaryRegionAnalysis
    -> Index(Operand=IntProperty(Value=0)) => #11
    #7, #11 -> Catch => #12
    -> MemberSelector(Selector=Contour.Rect)
    -> PropertyMapping(RegionOfInterest) => #14
    #14, #3 -> Bonsai.Vision.Crop(RegionOfInterest(X=1, Y=1, Width=30, Height=89)) => #15
    -> Bonsai.Dsp.Average
    -> MemberSelector(Selector=Val0) => #17
    #15 -> MemberSelector(Selector=Height) => #18
    #15 -> MemberSelector(Selector=Width) => #19
    #19, #18, #17 -> Zip
    #12 -> MemberSelector(Selector=Area) => #21
    #19, #18, #17, #21 -> Zip => #22
    #12 -> Bonsai.Scripting.Expressions.ExpressionTransform => #23
      Expression: (!Single.isNaN(it.Centroid.X))
    #22, #23 -> WithLatestFrom
    -> MemberSelector(Selector=Item1)
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression:
        new(
        Item1 as width,
        Item2 as height,
        Item3 as avgBright,
        Item4 as area
        )
    -> WorkflowOutput
#1, #3 -> GroupWorkflow BR-index5 => #29
    WorkflowInput Source2
    -> PropertyMapping(ThresholdValue) => #1
    WorkflowInput Source1
    -> Bonsai.Vision.Crop(RegionOfInterest(X=150, Y=208, Width=32, Height=91)) => #3
    #3, #1 -> Bonsai.Vision.Threshold(ThresholdValue=60, MaxValue=255, ThresholdType=Binary)
    -> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=375, MaxArea=nil)
    -> Bonsai.Vision.BinaryRegionAnalysis
    -> Index(Operand=IntProperty(Value=0)) => #7
    #3 -> Bonsai.Vision.Threshold(ThresholdValue=0, MaxValue=255, ThresholdType=Binary)
    -> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=200, MaxArea=nil)
    -> Bonsai.Vision.BinaryRegionAnalysis
    -> Index(Operand=IntProperty(Value=0)) => #11
    #7, #11 -> Catch => #12
    -> MemberSelector(Selector=Contour.Rect)
    -> PropertyMapping(RegionOfInterest) => #14
    #14, #3 -> Bonsai.Vision.Crop(RegionOfInterest(X=1, Y=1, Width=30, Height=89)) => #15
    -> Bonsai.Dsp.Average
    -> MemberSelector(Selector=Val0) => #17
    #15 -> MemberSelector(Selector=Height) => #18
    #15 -> MemberSelector(Selector=Width) => #19
    #19, #18, #17 -> Zip
    #12 -> MemberSelector(Selector=Area) => #21
    #19, #18, #17, #21 -> Zip => #22
    #12 -> Bonsai.Scripting.Expressions.ExpressionTransform => #23
      Expression: (!Single.isNaN(it.Centroid.X))
    #22, #23 -> WithLatestFrom
    -> MemberSelector(Selector=Item1)
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression:
        new(
        Item1 as width,
        Item2 as height,
        Item3 as avgBright,
        Item4 as area
        )
    -> WorkflowOutput
#1, #3 -> GroupWorkflow BR-index6 => #30
    WorkflowInput Source2
    -> PropertyMapping(ThresholdValue) => #1
    WorkflowInput Source1
    -> Bonsai.Vision.Crop(RegionOfInterest(X=150, Y=208, Width=32, Height=91)) => #3
    #3, #1 -> Bonsai.Vision.Threshold(ThresholdValue=60, MaxValue=255, ThresholdType=Binary)
    -> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=375, MaxArea=nil)
    -> Bonsai.Vision.BinaryRegionAnalysis
    -> Index(Operand=IntProperty(Value=0)) => #7
    #3 -> Bonsai.Vision.Threshold(ThresholdValue=0, MaxValue=255, ThresholdType=Binary)
    -> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=200, MaxArea=nil)
    -> Bonsai.Vision.BinaryRegionAnalysis
    -> Index(Operand=IntProperty(Value=0)) => #11
    #7, #11 -> Catch => #12
    -> MemberSelector(Selector=Contour.Rect)
    -> PropertyMapping(RegionOfInterest) => #14
    #14, #3 -> Bonsai.Vision.Crop(RegionOfInterest(X=1, Y=1, Width=30, Height=89)) => #15
    -> Bonsai.Dsp.Average
    -> MemberSelector(Selector=Val0) => #17
    #15 -> MemberSelector(Selector=Height) => #18
    #15 -> MemberSelector(Selector=Width) => #19
    #19, #18, #17 -> Zip
    #12 -> MemberSelector(Selector=Area) => #21
    #19, #18, #17, #21 -> Zip => #22
    #12 -> Bonsai.Scripting.Expressions.ExpressionTransform => #23
      Expression: (!Single.isNaN(it.Centroid.X))
    #22, #23 -> WithLatestFrom
    -> MemberSelector(Selector=Item1)
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression:
        new(
        Item1 as width,
        Item2 as height,
        Item3 as avgBright,
        Item4 as area
        )
    -> WorkflowOutput
#25, #26, #27, #28, #29, #30 -> Zip => #31
#10, #17, #24, #31 -> Zip
-> Bonsai.Scripting.Expressions.ExpressionTransform
  Expression:
    new(
    Item1 as TopLeft,
    Item2 as TopRight,
    Item3 as BottomLeft,
    Item4 as BottomRight)
-> Bonsai.IO.CsvWriter(FileName=output-5_2023-01-27_run-.csv, Append=false, Overwrite=false, Suffix=Timestamp, IncludeHeader=true)
